<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>c:\git\Aind.Behavior.DynamicForaging\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime">
                <py:PythonHome>../.venv</py:PythonHome>
                <py:ScriptPath>./Extensions\bonsai.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsWaveformUploadDone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateAutoWaterState">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GlobalAutoWaterState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialMetrics">
              <rx:Name>GlobalTrialMetrics</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BiasOffsetBounds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="28" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="28" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartupLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>isNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Visualizer">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ui:VisualizerWindow">
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ImGuiContext</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DataTransformations</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialOutcome</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedTrial</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialMetrics</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Bias</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (it as Bias)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedBias</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickRight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickLeft</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:AccumulateToImmutableList" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>EthogramEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OutputControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Single">
                    <rx:Name>UiHabituationTimeUpdate</rx:Name>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VisualizerStructure</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameSubject" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Behavior</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Bias</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Ethogram</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TabBarBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>PreSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>pre-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PreSession</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>InterSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>inter-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>InterSession</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="16" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="25" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source3" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BehaviorVisualizer.bonsai">
              <PlotName>Behavior1</PlotName>
              <LickLeftSubject>LickLeft</LickLeftSubject>
              <LickRightSubject>LickRight</LickRightSubject>
              <TrialSubject>TimedTrial</TrialSubject>
              <FrameSubject>Behavior</FrameSubject>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BiasVisualizer.bonsai">
              <FrameSubject>Bias</FrameSubject>
              <TimedBias>TimedBias</TimedBias>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Ethogram</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EthogramEvents</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoftwareEvents" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SoftwareEventVisualizer">
                <p2:Visible>true</p2:Visible>
                <p2:SoftwareEvents />
                <p2:TrialBreakEventName>Break</p2:TrialBreakEventName>
                <p2:PlotHeight>200</p2:PlotHeight>
                <p2:ShadedAreaPlotters>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>TrialOutcome</p2:EventName>
                    <p2:Color>CornflowerBlue</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>RewardPeriod</p2:EventName>
                    <p2:Color>Crimson</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>ITI</p2:EventName>
                    <p2:Color>Cyan</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                </p2:ShadedAreaPlotters>
                <p2:PointPlotters>
                  <p2:PointPlotter>
                    <p2:EventName>TrialOutcome</p2:EventName>
                    <p2:Color>SaddleBrown</p2:Color>
                    <p2:YPosition>0.5</p2:YPosition>
                    <p2:MarkerSize>2</p2:MarkerSize>
                    <p2:Marker>Circle</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>LickLeft</p2:EventName>
                    <p2:Color>Red</p2:Color>
                    <p2:YPosition>0.8</p2:YPosition>
                    <p2:MarkerSize>2</p2:MarkerSize>
                    <p2:Marker>Down</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>LickRight</p2:EventName>
                    <p2:Color>DodgerBlue</p2:Color>
                    <p2:YPosition>0.2</p2:YPosition>
                    <p2:MarkerSize>2</p2:MarkerSize>
                    <p2:Marker>Up</p2:Marker>
                  </p2:PointPlotter>
                </p2:PointPlotters>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStream</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
              <FrameSubject>Camera</FrameSubject>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MetadataVisualizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FrameSubject" />
                    <Property Name="StartExperimentSubject" />
                    <Property Name="EndExperimentSubject" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>MetadataVisualizer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>CurrentMetadata</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="FrameSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Metadata</Name>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>7</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentMetadata</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Experimenter</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Count</Selector>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Expo</imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentMetadata</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Subject</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Plimbo</imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentMetadata</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>SessionName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Stage1</imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentMetadata</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Experiment</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Task6</imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>2</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:TextBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>Habituation</imgui:Text>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:InputFloatBuilder">
                          <imgui:Name>Habituation</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:InitialValue>0</imgui:InitialValue>
                          <imgui:Step>0</imgui:Step>
                          <imgui:StepFast>0</imgui:StepFast>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="UiHabituationTimeUpdate" Category="UiControl" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>UiHabituationTimeUpdate</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>START</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="StartExperimentSubject" Category="UiControl" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StartExperimentShortcut</Name>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="imgui:ButtonBuilder">
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Text>STOP</imgui:Text>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="EndExperimentSubject" Category="UiControl" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>EndExperiment</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="5" To="13" Label="Source1" />
                        <Edge From="5" To="18" Label="Source1" />
                        <Edge From="5" To="23" Label="Source1" />
                        <Edge From="5" To="28" Label="Source1" />
                        <Edge From="5" To="37" Label="Source1" />
                        <Edge From="5" To="42" Label="Source1" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="13" To="17" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="18" To="22" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source2" />
                        <Edge From="23" To="27" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source2" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="29" To="32" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="36" Label="Source1" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="35" Label="Source1" />
                        <Edge From="34" To="35" Label="Source2" />
                        <Edge From="35" To="36" Label="Source2" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="39" To="41" Label="Source1" />
                        <Edge From="40" To="41" Label="Source2" />
                        <Edge From="42" To="43" Label="Source1" />
                        <Edge From="43" To="44" Label="Source1" />
                        <Edge From="44" To="46" Label="Source1" />
                        <Edge From="45" To="46" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InterSessionVisualizer.bonsai">
              <FrameSubject>InterSession</FrameSubject>
              <UiGiveLeft>UiGiveLeft</UiGiveLeft>
              <UiGiveRight>UiGiveRight</UiGiveRight>
              <UiMoveLeft>UiMoveLeft</UiMoveLeft>
              <UiMoveRight>UiMoveRight</UiMoveRight>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>